---
API: 2.1
OpenSesame: 3.2.8
Platform: nt
---
set width 1680
set uniform_coordinates no
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 1050
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\pink\\Desktop\\cue search target suppression"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background "#bababa"

define inline_script askforregularity
	set description "Executes Python code"
	___run__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return  var.dis_reply != u'no' and  var.dis_loc != u'no'  and var.tar_loc != u'no'
	
	
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_dis_reg = Label(u'Have you ever noticed any regularity about the location of target ? ')
	checkbox_yes = Checkbox(text=u'Yes', group=u'dis_reply', var=u'dis_reply')
	checkbox_no = Checkbox(text=u'No', group=u'dis_reply', var=u'dis_reply')
	label_dis_loc = Label(u'which place does the target less appear at? (you can guess one) ')
	label_tar_loc = Label(u'which place does the target more appear at? (you can guess one) ')
	checkbox_0 = Checkbox(text=u'0',group = u'dis_loc', var = u'dis_loc')
	checkbox_1 = Checkbox(text=u'1',group = u'dis_loc', var = u'dis_loc')
	checkbox_2 = Checkbox(text=u'2',group = u'dis_loc', var = u'dis_loc')
	checkbox_3 = Checkbox(text=u'3',group = u'dis_loc', var = u'dis_loc')
	checkbox_4 = Checkbox(text=u'0',group = u'tar_loc', var = u'tar_loc')
	checkbox_5 = Checkbox(text=u'1',group = u'tar_loc', var = u'tar_loc')
	checkbox_6 = Checkbox(text=u'2',group = u'tar_loc', var = u'tar_loc')
	checkbox_7 = Checkbox(text=u'3',group = u'tar_loc', var = u'tar_loc')
	image = ImageWidget(path = pool[u'location_judgment.tif'],adjust = True,frame = False)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1,1,1,1,1], cols=[1,1,1,1])
	my_form.set_widget(label_dis_reg, (0, 0),colspan=4)
	my_form.set_widget(checkbox_yes, (1, 1))
	my_form.set_widget(checkbox_no, (3,1))
	my_form.set_widget(label_dis_loc, (0, 2),colspan=4)
	my_form.set_widget(image, (1,3), colspan=2,rowspan = 2)
	my_form.set_widget(checkbox_0, (0,5))
	my_form.set_widget(checkbox_1, (1,5))
	my_form.set_widget(checkbox_2, (2,5))
	my_form.set_widget(checkbox_3, (3,5))
	my_form.set_widget(label_tar_loc, (0, 6),colspan=4)
	my_form.set_widget(checkbox_4, (0,7))
	my_form.set_widget(checkbox_5, (1,7))
	my_form.set_widget(checkbox_6, (2,7))
	my_form.set_widget(checkbox_7, (3,7))
	my_form.set_widget(button_ok,  (1,8),colspan=2)
	my_form._exec()
	
	exp._log.write(u'dis_reply=%s'%var.dis_reply)
	exp._log.write(u'dis_loc=%s'%var.dis_loc)
	exp._log.write(u'tar_loc=%s'%var.tar_loc)
	__end__
	set _prepare ""

define inline_script blank
	set description "Executes Python code"
	___run__
	blank.show()
	var.sleep(dur_time)
	__end__
	___prepare__
	blank = canvas()
	dur_time = random.randint(500,750)
	__end__

define loop block_loop
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 64
	set continuous no
	set column_order ""
	set break_if_on_first no
	set break_if "[count_trial_sequence]>20 and [practice]=yes"
	setcycle 0 new_column_1 ""
	setcycle 1 new_column_1 ""
	setcycle 2 new_column_1 ""
	setcycle 3 new_column_1 ""
	setcycle 4 new_column_1 ""
	setcycle 5 new_column_1 ""
	setcycle 6 new_column_1 ""
	setcycle 7 new_column_1 ""
	setcycle 8 new_column_1 ""
	setcycle 9 new_column_1 ""
	setcycle 10 new_column_1 ""
	setcycle 11 new_column_1 ""
	setcycle 12 new_column_1 ""
	setcycle 13 new_column_1 ""
	setcycle 14 new_column_1 ""
	setcycle 15 new_column_1 ""
	setcycle 16 new_column_1 ""
	setcycle 17 new_column_1 ""
	setcycle 18 new_column_1 ""
	setcycle 19 new_column_1 ""
	setcycle 20 new_column_1 ""
	setcycle 21 new_column_1 ""
	setcycle 22 new_column_1 ""
	setcycle 23 new_column_1 ""
	setcycle 24 new_column_1 ""
	setcycle 25 new_column_1 ""
	setcycle 26 new_column_1 ""
	setcycle 27 new_column_1 ""
	setcycle 28 new_column_1 ""
	setcycle 29 new_column_1 ""
	setcycle 30 new_column_1 ""
	setcycle 31 new_column_1 ""
	setcycle 32 new_column_1 ""
	setcycle 33 new_column_1 ""
	setcycle 34 new_column_1 ""
	setcycle 35 new_column_1 ""
	setcycle 36 new_column_1 ""
	setcycle 37 new_column_1 ""
	setcycle 38 new_column_1 ""
	setcycle 39 new_column_1 ""
	setcycle 40 new_column_1 ""
	setcycle 41 new_column_1 ""
	setcycle 42 new_column_1 ""
	setcycle 43 new_column_1 ""
	setcycle 44 new_column_1 ""
	setcycle 45 new_column_1 ""
	setcycle 46 new_column_1 ""
	setcycle 47 new_column_1 ""
	setcycle 48 new_column_1 ""
	setcycle 49 new_column_1 ""
	setcycle 50 new_column_1 ""
	setcycle 51 new_column_1 ""
	setcycle 52 new_column_1 ""
	setcycle 53 new_column_1 ""
	setcycle 54 new_column_1 ""
	setcycle 55 new_column_1 ""
	setcycle 56 new_column_1 ""
	setcycle 57 new_column_1 ""
	setcycle 58 new_column_1 ""
	setcycle 59 new_column_1 ""
	setcycle 60 new_column_1 ""
	setcycle 61 new_column_1 ""
	setcycle 62 new_column_1 ""
	setcycle 63 new_column_1 ""
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run define_trial_list always
	run block_loop always
	run new_feedback "[practice]=no and [count_block_sequence]!=8"
	run feedback always

define inline_script correct_1
	set description "Executes Python code"
	___run__
	import winsound
	
	
	var.correct_1 = 1 if var.response_keyboard_response_1 in var.correct_response_1 else 0
	if var.correct_1 == 0:
			winsound.Beep(440,300)
	
	total_response_1 +=1
	total_correct_1 = total_correct_1 + var.correct_1
	acc_1 = 100*total_correct_1/total_response_1
	exp.set("acc_1",acc_1)
	__end__
	set _prepare ""

define inline_script correct_2
	set description "Executes Python code"
	___run__
	var.correct_2 = 1 if var.response_keyboard_response_2 in [var.correct_response_2] else 0
	
	if var.correct_2 == 0:
			winsound.Beep(440,300)
	total_response_2 +=1
	total_correct_2 = total_correct_2 + var.correct_2
	acc_2 = 100*total_correct_2/total_response_2
	exp.set("acc_2",acc_2)
	__end__
	set _prepare ""

define inline_script define_trial_list
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	global real_con_list, factor_list
	### get subject number
	Subj_num = self.get("subject_nr")
	block_nr = self.get("count_block_sequence")
	
	var.left_num = 8 - block_nr
	##############################################
	##the working memory task######################
	chance = [0,1,1,2]*16
	random.shuffle(chance)
	factor = []
	for c in ["red","green"]:
		for s in ["in","out"]:
			for d in ["left","right"]:
					factor.append([c,s,d])
	factor_list =random.sample(factor*8,64)
	
	
	
	memory_point = [0,1,2,3]
	### Define the fixed distractor location and other locations.
	Fixed_se = Subj_num%12
	
	loc_seq= []
	tar_loc = range(0,4) 
	for a in tar_loc:
		for b in tar_loc:
			if a== b :
				continue
			loc_seq.append([a,b])
	print loc_seq
	var.high_loc,var.low_loc =loc_seq[Fixed_se]	
	high =var.high_loc
	low =var.low_loc
	other_loc = [i for i in tar_loc if i not in [high,low]]
	
	print other_loc
	trial_list = []
	noreg_list = []
	#target in high probobility location 3
	for a in other_loc*2 +[high]*3 +[low]:
		for b in memory_point:
			trial_list.append([a,b])
	
	################################################
	
	for a in tar_loc:
		for b in memory_point: 
			noreg_list.append([a,b])
	
	
	
	print  len(trial_list) , len(noreg_list)
	
	real_con_list = []
	
	if block_nr == 0:
		real_con_list = noreg_list*2
	else:
		real_con_list = trial_list*2
	
	random.shuffle(real_con_list)
	
	total_response_1 = 0
	total_correct_1  = 0
	total_response_2 = 0
	total_correct_2  = 0
	__end__

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="The whole experiment is over<br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	set allowed_responses space
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="The practice is over<br /><br />Press space to the formal experiment" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run information always
	run instruction_high always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run askforregularity always
	run end_of_experiment always

define inline_script experiment_inline_script
	set description "Executes Python code"
	___run__
	fixCanvas.show()
	var.sleep(300)
	memoryCanvas.show()
	var.sleep(500)
	
	##############################
	fixCanvas.show()
	var.sleep(1500)
	myCanvas.show()
	__end__
	___prepare__
	from math import pi,cos,sin,atan
	import random
	global real_con_list,factor_list
	
	memoryCanvas   = canvas()
	fixCanvas      = canvas(penwidth = 4)
	myCanvas       = canvas()
	responseCanvas = canvas()
	blank          = canvas()
	
	var.location   = real_con_list.pop(0)
	var.tar_position,var.cue_position = var.location
	var.fac        = factor_list.pop(0)
	var.tar_color,var.dis_shape,var.detection = var.fac
	a = var.tar_position
	d = var.cue_position
	c = chance.pop()
	
	dis_shape = var.dis_shape
	tar_color = var.tar_color
	detection = var.detection
	
		
	
	cx = myCanvas.width/2
	cy = myCanvas.height/2
	deg2pix  = cx/(atan(47.38/144)*180/pi)  # change if need, distance and screen size
	print deg2pix
	fixCanvas.fixdot(cx,cy,style = u'medium-filled')
	
	setsize = 4
	
	#draw cross
	
	myCanvas.copy(fixCanvas)
	#########################################
	
	Decc = 4 # the radius of the invisible circle
	anglesegment=2*pi/setsize
	circlepositions = []
	for i in range(0,setsize):    
		current_x= Decc*deg2pix * cos(i*anglesegment+pi/4)+ cx      
		current_y= Decc*deg2pix * sin(i*anglesegment+pi/4)+ cy      
		circlepositions.append((current_x,current_y))
	################################################################
	####working memory task
	memoryCanvas.copy(fixCanvas)
	responseCanvas.copy(fixCanvas)
	print cx,cy,circlepositions[d][0],circlepositions[d][1] 
	cue_locaions =[]
	cue_decc = [0.7,1.2,1.7]
	anglesegment1=2*pi/6
	for Decc in cue_decc:
		for i in range(0,6):    
			current_x= Decc*deg2pix * cos(i*anglesegment1)+ circlepositions[d][0]     
			current_y= Decc*deg2pix * sin(i*anglesegment1)+ circlepositions[d][1]
			cue_locaions.append((current_x,current_y))
	loc1 = random.choice(cue_locaions)
		
	#memoryCanvas.rect(loc1[0]-0.15*deg2pix,loc1[1]+0.15*deg2pix,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
	memoryCanvas.text('e',x=loc1[0],y = loc1[1],font_size=1.1*deg2pix,font_family = "New York")
	
	wrong_locations1 = []
	wrong_locations2 = []
	for i in range(0,6):    
		current_x= 1.9*deg2pix * cos(i*anglesegment1)+ loc1[0]   
		current_y= 1.9*deg2pix * sin(i*anglesegment1)+ loc1[1]
		wrong_locations1.append((current_x,current_y))
	
	for i in range(0,6):    
		current_x= 1.4*deg2pix * cos(i*anglesegment1)+ loc1[0]   
		current_y= 1.4*deg2pix * sin(i*anglesegment1)+ loc1[1]
		wrong_locations2.append((current_x,current_y))
	print wrong_locations1, wrong_locations2
	if c == 0:
		wrong_loc = random.choice(wrong_locations1)
		responseCanvas.text('E',x=wrong_loc[0],y = wrong_loc[1],font_size=deg2pix,font_family = "New York")
		#responseCanvas.rect(wrong_loc[0]-0.15*deg2pix,wrong_loc[1]+0.15*deg2pix,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		var.correct_response_2 = "d"	
	if c == 2:
		wrong_loc = random.choice(wrong_locations2)
		responseCanvas.text('E',x=wrong_loc[0],y = wrong_loc[1],font_size=deg2pix,font_family = "New York")
		#responseCanvas.rect(wrong_loc[0]-0.15*deg2pix,wrong_loc[1]+0.15*deg2pix,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		var.correct_response_2 = "d"
	if c == 1:
		var.correct_response_2 = "s"
		#responseCanvas.rect(loc1[0]-0.15*deg2pix,loc1[1]+0.15*deg2pix,0.3*deg2pix,0.3*deg2pix,color = "white", fill = True)
		responseCanvas.text('E',x=loc1[0],y = loc1[1],font_size=deg2pix,font_family = "New York")
			
	######################################################################################################
	
	
	if tar_color == "red":
		tar_color = (220,0,0)
	elif tar_color =="green":
		tar_color = (0,180,0)
	if detection == "right":
		var.correct_response_1 = u"right"
	elif detection == "left":
		var.correct_response_1 = u"left"
		
	
	
			
	#draw target
	if detection == "left":
		myCanvas.polygon(((circlepositions[a][0]+0.1*deg2pix, circlepositions[a][1]),(circlepositions[a][0]+1.1*deg2pix, circlepositions[a][1]+deg2pix*0.5),(circlepositions[a][0]+1.1*deg2pix, circlepositions[a][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 2	
		myCanvas.polygon(((circlepositions[a][0]-1.1*deg2pix, circlepositions[a][1]),(circlepositions[a][0]-0.1*deg2pix, circlepositions[a][1]+deg2pix*0.5),(circlepositions[a][0]-0.1*deg2pix, circlepositions[a][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 1
		
	elif detection == "right":
		myCanvas.polygon(((circlepositions[a][0]+0.1*deg2pix, circlepositions[a][1]+deg2pix*0.5),(circlepositions[a][0]+1.1*deg2pix, circlepositions[a][1]),(circlepositions[a][0]+0.1*deg2pix, circlepositions[a][1]-deg2pix*0.5)),color = tar_color,fill=True) #right 2	
		myCanvas.polygon(((circlepositions[a][0]-1.1*deg2pix, circlepositions[a][1]+0.5*deg2pix),(circlepositions[a][0]-1.1*deg2pix, circlepositions[a][1]-0.5*deg2pix),(circlepositions[a][0]-0.1*deg2pix, circlepositions[a][1])),color = tar_color,fill=True) #right 1
			
		
	
	
	other_positions1 = [l for l in circlepositions if l not in [circlepositions[a]]]
	random.shuffle(other_positions1)
	#in
	myCanvas.polygon(((other_positions1[0][0]-1.1*deg2pix, other_positions1[0][1]+0.5*deg2pix),(other_positions1[0][0]-1.1*deg2pix, other_positions1[0][1]-0.5*deg2pix),(other_positions1[0][0]-0.1*deg2pix, other_positions1[0][1])),color = tar_color,fill=True) #right 1
	myCanvas.polygon(((other_positions1[0][0]+0.1*deg2pix, other_positions1[0][1]),(other_positions1[0][0]+1.1*deg2pix, other_positions1[0][1]+deg2pix*0.5),(other_positions1[0][0]+1.1*deg2pix, other_positions1[0][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 2
	#out
	myCanvas.polygon(((other_positions1[1][0]+0.1*deg2pix, other_positions1[1][1]+deg2pix*0.5),(other_positions1[1][0]+1.1*deg2pix, other_positions1[1][1]),(other_positions1[1][0]+0.1*deg2pix, other_positions1[1][1]-deg2pix*0.5)),color = tar_color,fill=True) #right 2
	myCanvas.polygon(((other_positions1[1][0]-1.1*deg2pix, other_positions1[1][1]),(other_positions1[1][0]-0.1*deg2pix, other_positions1[1][1]+deg2pix*0.5),(other_positions1[1][0]-0.1*deg2pix, other_positions1[1][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 1
		
	
	if dis_shape == "in":
			#draw distractor
		myCanvas.polygon(((other_positions1[2][0]-1.1*deg2pix, other_positions1[2][1]+0.5*deg2pix),(other_positions1[2][0]-1.1*deg2pix, other_positions1[2][1]-0.5*deg2pix),(other_positions1[2][0]-0.1*deg2pix, other_positions1[2][1])),color = tar_color,fill=True) #right 1
		myCanvas.polygon(((other_positions1[2][0]+0.1*deg2pix, other_positions1[2][1]),(other_positions1[2][0]+1.1*deg2pix, other_positions1[2][1]+deg2pix*0.5),(other_positions1[2][0]+1.1*deg2pix, other_positions1[2][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 2	
	
		
	elif dis_shape == "out":
	
		#draw distractor
		myCanvas.polygon(((other_positions1[2][0]+0.1*deg2pix, other_positions1[2][1]+deg2pix*0.5),(other_positions1[2][0]+1.1*deg2pix, other_positions1[2][1]),(other_positions1[2][0]+0.1*deg2pix, other_positions1[2][1]-deg2pix*0.5)),color = tar_color,fill=True) #right 2
		myCanvas.polygon(((other_positions1[2][0]-1.1*deg2pix, other_positions1[2][1]),(other_positions1[2][0]-0.1*deg2pix, other_positions1[2][1]+deg2pix*0.5),(other_positions1[2][0]-0.1*deg2pix, other_positions1[2][1]-deg2pix*0.5)),color = tar_color,fill=True) #left 1
	__end__

define loop experimental_loop
	set source table
	set skip 0
	set repeat 8
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 regularity condition
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	set allowed_responses space
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />The search task accuracy was [acc_1]%<br /><br />The memory task accuracy was [acc_2]%<br /><br />Press space to continue" x=0 y=80 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[acc_1]<90" text="Please focus on the searching task !" x=0 y=-60 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[acc_2]<75" text="Please focus on the memory task !" x=0 y=-100 z_index=0
	draw textline center=1 color=red font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if="[avg_rt]>1000" text="Please response as SOON as possible !" x=0 y=-140 z_index=0

define inline_script information
	set description "Executes Python code"
	set _run ""
	___prepare__
	exp._log.close()
	path = 'cue search_4_tarSuppression_64-%d.csv' % (self.get('subject_nr'))
	exp.logfile = path
	# Reopen the logfile
	exp._log = None
	exp.init_log()
	
	
	
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.gender != u'no' and var.age != u'' and var.hand != u'no'
	
	
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in ['0','1','2','3','4','5','6','7','8','9','backspace']
	
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	label_gender= Label(u'Your gender')
	checkbox_male = Checkbox(text=u'Male', group=u'gender', var=u'gender')
	checkbox_female = Checkbox(text=u'Female', group=u'gender', var=u'gender')
	label_hand = Label(u'Handedness')
	checkbox_left = Checkbox(text=u'Left-handed', group=u'hand', var=u'hand')
	checkbox_right = Checkbox(text=u'Right-handed', group=u'hand', var=u'hand')
	label_age = Label(u'Your age')
	# Specify a key filter so that only digits are accepted as text input
	input_age = TextInput(stub=u'Age here …', var=u'age', key_filter=filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1], cols=[1,1,1])
	my_form.set_widget(label_gender, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	
	my_form.set_widget(label_hand, (0, 1))
	my_form.set_widget(checkbox_left, (1, 1))
	my_form.set_widget(checkbox_right, (2, 1))
	
	my_form.set_widget(label_age, (0, 2))
	my_form.set_widget(input_age, (1, 2), colspan=2)
	my_form.set_widget(button_ok, (1, 3))
	my_form._exec()
	__end__

define sketchpad instruction_high
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=New font_italic=no font_size=36 html=yes show_if=always text=Instruction x=0 y=-400 z_index=0
	draw image center=1 file="instruction.tif" scale=0.9 show_if=always x=232 y=-164 z_index=0
	draw textline center=0 color="#000000" font_bold=no font_family=New font_italic=no font_size=30 html=yes show_if=always text="1.firstly, please remember the location of the letter e.<br /><br />2.after 1500 ms, you need to find the target which two triangles are head for the same direction, <br />and press 'left' if it head to left, press 'right' if it head to right.<br /><br />3.an uppercase letter E will show up after 1500 ms, you need to indicate whether or not the letter is in <br />the same location as the lowercase one, press 's' for location stay the same and press 'd' for location changed.<br /><br />4. please response as soon and accuratly as possible.<br /><br />*5. please focus on the central dot during the search task.<br /><br /> 6. please put on the headphone, you will hear the beep sound when you make mistakes.<br /><br />" x=-666 y=40 z_index=0

define keyboard_response keyboard_response_1
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right"

define keyboard_response keyboard_response_2
	set timeout 3000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "s;d"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log avg_rt
	log correct_1
	log correct_2
	log response_time_keyboard_response_1
	log response_time_keyboard_response_2
	log subject_nr
	log count_block_loop
	log practice
	log tar_position
	log hand
	log gender
	log age
	log response_keyboard_response_1
	log response_keyboard_response_2
	log acc_1
	log acc_2
	log tar_color
	log cue_position
	log count_trial_sequence
	log dis_shape
	log detection
	log low_loc
	log high_loc

define inline_script memory_response
	set description "Executes Python code"
	___run__
	fixCanvas.show()
	var.sleep(1500)
	responseCanvas.show()
	__end__
	set _prepare ""

define feedback new_feedback
	set reset_variables yes
	set duration 60000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="This part is over<br /><br />you still have [left_num] parts left<br /><br />Please take a break for 1 min" x=0 y=40 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 regularity condition
	setcycle 0 practice yes
	run block_sequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run experiment_inline_script always
	run keyboard_response_1 always
	run correct_1 always
	run memory_response always
	run keyboard_response_2 always
	run correct_2 always
	run logger always
	run blank always

